opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: Heart
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 5}
  Lukas 24 Tube Rack 1500 µL: {definitionId: custom_beta/lukas_24_tuberack_1500ul/1, slot: 2}
  Corning 96 Well Plate 360 µL Flat: {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 3}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - water: {description: h2o}
  - red_water: {description: h2o}
ingredLocations:
  Lukas 24 Tube Rack 1500 µL:
    red_water {volume: 1500}: A1, A2
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: Lukas 24 Tube Rack 1500 µL
  aspirate_wells: A1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B2-D2, A3, E3, A4, F4, A5, G5, B6, H6, B7, H7, A8, G8, A9, F9, A10, E10, B11-D11
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 50
  path: single
  changeTip: once
  aspirate_labware: Lukas 24 Tube Rack 1500 µL
  aspirate_wells: A2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: B3-D3, B4, E4, B5, F5, C6, G6, C7, G7, B8, F8, B9, E9, B10-D10
labwareDefinitions:
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  custom_beta/lukas_24_tuberack_1500ul/1:
    brand: {brand: Lukas, brandId: [Printed]}
    metadata: {displayName: Lukas 24 Tube Rack 1500 µL, displayCategory: tubeRack, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.75, yDimension: 85.5, zDimension: 79}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: lukas_24_tuberack_1500ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 36, totalLiquidVolume: 1500, shape: circular, diameter: 10, x: 18.21, y: 75.43, z: 43}
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 20, labware: Lukas 24 Tube Rack 1500 µL, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 20, labware: Corning 96 Well Plate 360 µL Flat, well: B2, offsetFromBottomMm: 0.5, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 20, labware: Lukas 24 Tube Rack 1500 µL, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 20, labware: Corning 96 Well Plate 360 µL Flat, well: B2, offsetFromBottomMm: 0.5, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: Lukas 24 Tube Rack 1500 µL, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
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