opentrons/protocol-designer 5.2.6
schemaVersion: 5
protocolName: PCR_template
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 5}
  Lukas 24 Tube Rack 1500 µL: {definitionId: custom_beta/lukas_24_tuberack_1500ul/1, slot: 6}
  Thermofisher Scientific 96 well 200ul: {definitionId: custom_beta/fisherscientific_96_wellplate_200ul/1, slot: 3}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
ingredients:
  - water: {description: h2o}
ingredLocations:
  Lukas 24 Tube Rack 1500 µL:
    water {volume: 1500}: A1
  Thermofisher Scientific 96 well 200ul:
    water {volume: 10}: H11
    water {volume: 200}: H12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: multiDispense
  changeTip: always
  aspirate_labware: Lukas 24 Tube Rack 1500 µL
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 10
  dispense_labware: Thermofisher Scientific 96 well 200ul
  dispense_wells: A1-A4
  dispense_touchTip_checkbox: true
  dispense_airGap_checkbox: true
  dispense_airGap_volume: 1
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Thermofisher Scientific 96 well 200ul
  aspirate_wells: H11
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  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 1
  dispense_labware: Thermofisher Scientific 96 well 200ul
  dispense_wells: H1
  dispense_flowRate: 8
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Thermofisher Scientific 96 well 200ul
  aspirate_wells: H12
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  dispense_labware: Thermofisher Scientific 96 well 200ul
  dispense_wells: H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Thermofisher Scientific 96 well 200ul
  aspirate_wells: H12
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  dispense_labware: Thermofisher Scientific 96 well 200ul
  dispense_wells: H1
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 10
  dispense_touchTip_checkbox: true
  blowout_checkbox: true
  blowout_location: Trash
labwareDefinitions:
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  custom_beta/lukas_24_tuberack_1500ul/1:
    brand: {brand: Lukas, brandId: [Printed]}
    metadata: {displayName: Lukas 24 Tube Rack 1500 µL, displayCategory: tubeRack, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.75, yDimension: 85.5, zDimension: 79}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: lukas_24_tuberack_1500ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 36, totalLiquidVolume: 1500, shape: circular, diameter: 10, x: 18.21, y: 75.43, z: 43}
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  custom_beta/fisherscientific_96_wellplate_200ul/1:
    brand: {brand: ThermoFisher Scientific, brandId: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 15.5}
    metadata: {displayCategory: wellPlate, displayName: Thermofisher Scientific 96 well 200ul, displayVolumeUnits: µL, tags: []}
    namespace: custom_beta
    parameters: {format: irregular, isMagneticModuleCompatible: false, isTiprack: false, loadName: fisherscientific_96_wellplate_200ul, quirks: []}
    version: 1
    wells:
      A1: {depth: 15, diameter: 5.5, shape: circular, totalLiquidVolume: 200, x: 14.38, y: 74.24, z: 0.5}
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Filter Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: Lukas 24 Tube Rack 1500 µL, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 10, labware: Lukas 24 Tube Rack 1500 µL, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: Lukas 24 Tube Rack 1500 µL, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 10, labware: Lukas 24 Tube Rack 1500 µL, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 10, labware: Lukas 24 Tube Rack 1500 µL, well: A1, offsetFromBottomMm: 1, flowRate: 3.78}
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