opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: Transfer water
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, slot: 11}
  NEST 96 Well Plate 200 µL Flat: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, slot: 5}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Water: {serialize: true}
ingredLocations:
  NEST 96 Well Plate 200 µL Flat:
    Water {volume: 200}: A1-A12, B12-H12, H1-H11, B1-G1
savedStepForms:
- stepType: mix
  stepName: mix
  stepDetails: mixing test
  pipette: p20_single_gen2
  volume: 20
  times: 5
  changeTip: always
  labware: NEST 96 Well Plate 200 µL Flat
  wells: A7
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  mix_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: perSource
  aspirate_labware: NEST 96 Well Plate 200 µL Flat
  aspirate_wells: A7
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  dispense_labware: NEST 96 Well Plate 200 µL Flat
  dispense_wells: B11
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: perSource
  aspirate_labware: NEST 96 Well Plate 200 µL Flat
  aspirate_wells: A9
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  dispense_labware: Trash
  dispense_wells: A1
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p20_single_gen2, labware: Opentrons 96 Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_single_gen2, volume: 20, labware: NEST 96 Well Plate 200 µL Flat, well: A7, offsetFromBottomMm: 0.5, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 20, labware: NEST 96 Well Plate 200 µL Flat, well: A7, offsetFromBottomMm: 0.5, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 20, labware: NEST 96 Well Plate 200 µL Flat, well: A7, offsetFromBottomMm: 0.5, flowRate: 3.78}
- dispense: {pipette: p20_single_gen2, volume: 20, labware: NEST 96 Well Plate 200 µL Flat, well: A7, offsetFromBottomMm: 0.5, flowRate: 3.78}
- aspirate: {pipette: p20_single_gen2, volume: 20, labware: NEST 96 Well Plate 200 µL Flat, well: A7, offsetFromBottomMm: 0.5, flowRate: 3.78}
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